PsychoPy2experiment version="2024.2.1"
Settings
  Audio lib = ptb
  Completed URL = https://app.prolific.com/submissions/complete?cc=C3F7D6M3
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = [1680, 1050]
  expName = SentirES_psychopy_fin
  keyboardBackend = Pyglet
  runMode = 0
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Routines
  Routine BCBL
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    TextComponent presentation
      letterHeight = 0.025
      startVal [time (s)] = 0.0
      units = height
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      text:
        Gracias por participar en SENTIRES de BCBL.

        Basque Center on Cognition, Brain and Language es un centro internacional de investigación interdisciplinar para el estudio de la cognición, el cerebro y el lenguaje. Visita nuestra página web (www.bcbl.eu) y síguenos en redes sociales como Facebook (@bcbl.eu), Instagram (bcbl_basque_center), Twitter (@bcbl_) y YouTube (BCBL) para conocer todas las novedades de nuestro centro así como del campo de la neurociencia cognitiva.
    ButtonComponent Acpeto
      bold = True
      forceEndRoutine = True
      letterHeight = 0.03
      pos = (0.55, -0.4)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      text = Acepto
      units = height
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    ImageComponent bcbl
      image = bcbl.jpg
      pos = (0.4,0.4)
      size = (0.2,0.2)
      startVal [time (s)] = 0.0
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  Routine warning_SPAN
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    TextComponent warning2PAN
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      units = height
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      text:
        Advertencia

        Este estudio usa palabras cotidianas. De vez en cuando esto significa que aparecen palabras que pueden ser explícitas u ofensivas. Si se siente incomodo en cualquier momento es libre de terminar la encuesta cerrando la ventana.

        Para continuar pulsa "Siguiente"'
    ButtonComponent next2PAN
      bold = True
      forceEndRoutine = True
      letterHeight = 0.03
      pos = (0.55, -0.4)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      text = Siguente
      units = height
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  Routine instructions2PAN
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    TextComponent instructions2PANtext
      letterHeight = 0.025
      startVal [time (s)] = 0.0
      units = height
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      text:
        INSTRUCCIONES

        Te vamos a preguntar cómo percibes palabras frecuentes usando seis sentidos corporales. No hay respuestas correctas ni incorrectas. La medida es de 0 (nunca lo percibes usando esa sensación corporal) hasta 5 (interactúas mucho usando esa sensación corporal).

        Haz clic en el número y cuando ya hayas rellenado las seis sensaciones, pulsa el botón "Siguiente" para empezar la siguiente palabra. Si no reconoces una palabra, pulsa “No sé la palabra" y haz clic en "Siguente" para continuar.

        Si quieres saber más sobre el experimento, ponte en contacto con los investigadores principales: Clara Martin (c.martin@bcbl.eu) o Cesar Caballero-Gaudes (c.caballero@bcbl.eu) en BCBL.
    ButtonComponent next2PANinstr
      bold = True
      forceEndRoutine = True
      letterHeight = 0.03
      pos = (0.55, -0.4)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      text = Siguiente
      units = height
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  Routine SentirES_psychopy
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    TextComponent pregunta
      letterHeight = 0.04
      pos = (-0.4,0.4)
      startVal [time (s)] = 0.0
      text = Cómo percibes
      units = height
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    TextComponent stimuli
      color = White
      letterHeight = 0.045
      pos = (-0.4,0.3)
      startVal [time (s)] = 0.0
      text [set every repeat] = $Word
      units = height
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    TextComponent audition
      letterHeight = 0.03
      pos = (-0.52,0.2)
      startVal [time (s)] = 0.0
      text = usando audición
      units = height
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    TextComponent taste
      letterHeight = 0.03
      pos = (-0.52,0.1)
      startVal [time (s)] = 0.0
      text = usando sabor
      units = height
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    TextComponent haptic
      letterHeight = 0.03
      pos = (-0.52,0)
      startVal [time (s)] = 0.0
      text = usando tacto
      units = height
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    TextComponent olfaction
      letterHeight = 0.03
      pos = (-0.52,-0.1)
      startVal [time (s)] = 0.0
      text = usando olor
      units = height
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    TextComponent vision
      color = White
      letterHeight = 0.03
      pos = (-0.52,-0.2)
      startVal [time (s)] = 0.0
      text = usando visión
      units = height
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    TextComponent interoception
      color = White
      letterHeight = 0.03
      pos = (-0.52,-0.3)
      startVal [time (s)] = 0.0
      units = height
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      text:
        usando sensaciones
        intracorporales
    SliderComponent auditionslider
      color = White
      forceEndRoutine = False
      granularity = 1
      initVal = 0
      labels = "nada","totalmente"
      letterHeight = 0.02
      pos = (0,0.2)
      size = (0.7, 0.05)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (0,1, 2, 3, 4, 5)
      units = height
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    SliderComponent tasteslider
      color = White
      forceEndRoutine = False
      granularity = 1
      labels = "nada","totalmente"
      letterHeight = 0.02
      pos = (0, 0.1)
      size = (0.7, 0.05)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (0,1, 2, 3, 4, 5)
      units = height
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    SliderComponent hapticslider
      color = White
      forceEndRoutine = False
      granularity = 1
      labels = "nada","totalmente"
      letterHeight = 0.02
      size = (0.7, 0.05)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (0,1, 2, 3, 4, 5)
      units = height
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    SliderComponent olfactionslider
      color = White
      forceEndRoutine = False
      granularity = 1
      labels = "nada","totalmente"
      letterHeight = 0.02
      pos = (0,-0.1)
      size = (0.7, 0.05)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (0,1, 2, 3, 4, 5)
      units = height
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    SliderComponent visionslider
      color = White
      forceEndRoutine = False
      granularity = 1
      labels = "nada","totalmente"
      letterHeight = 0.02
      pos = (0,-0.2)
      size = (0.7, 0.05)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (0,1, 2, 3, 4, 5)
      units = height
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    SliderComponent interoceptionsslider
      color = White
      forceEndRoutine = False
      granularity = 1
      labels = "nada","totalmente"
      letterHeight = 0.02
      pos = (0,-0.3)
      size = (0.7, 0.05)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (0,1, 2, 3, 4, 5)
      units = height
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    ButtonComponent next2PANstim
      bold = True
      forceEndRoutine = True
      letterHeight = 0.03
      pos = (0.55, -0.4)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      text = Siguiente
      units = height
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    ButtonComponent nose2PAN
      bold = True
      forceEndRoutine = True
      letterHeight = 0.03
      pos = (0.55, 0.3)
      size = (0.4, 0.2)
      startVal [time (s)] = 0
      text = no sé esta palabra
      units = height
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  Routine catch2SPAN2
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    TextComponent catch2PANmates
      letterHeight = 0.06
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = ¿Qué es 5 x 3?
      units = height
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    ButtonComponent quinze
      bold = True
      forceEndRoutine = True
      letterHeight = 0.04
      pos = (-0.5, 0)
      size = (0.3, 0.3)
      startVal [time (s)] = 0
      text = 15
      units = height
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    ButtonComponent setentaydos
      bold = True
      forceEndRoutine = True
      letterHeight = 0.04
      size = (0.3, 0.3)
      startVal [time (s)] = 0
      text = 72
      units = height
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    ButtonComponent cien
      bold = True
      forceEndRoutine = True
      letterHeight = 0.04
      pos = (0.5,0)
      size = (0.3, 0.3)
      startVal [time (s)] = 0
      text = 100
      units = height
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  Routine catch2PAN1
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    TextComponent catch2PANanimal
      letterHeight = 0.06
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = Elije el animal que vuela.
      units = height
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    ButtonComponent Oso
      bold = True
      forceEndRoutine = True
      letterHeight = 0.04
      pos = (-0.5, 0)
      size = (0.3, 0.3)
      startVal [time (s)] = 0
      text = Oso
      units = height
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    ButtonComponent Pez
      bold = True
      forceEndRoutine = True
      letterHeight = 0.04
      size = (0.3, 0.3)
      startVal [time (s)] = 0
      text = Pez
      units = height
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    ButtonComponent Ave
      bold = True
      forceEndRoutine = True
      letterHeight = 0.04
      pos = (0.5,0)
      size = (0.3, 0.3)
      startVal [time (s)] = 0
      text = Ave
      units = height
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  Routine catch2PAN3
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    TextComponent catch2PANfruta
      letterHeight = 0.06
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = Elije la fruta
      units = height
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    ButtonComponent bocadillo
      bold = True
      forceEndRoutine = True
      letterHeight = 0.04
      pos = (-0.5, 0)
      size = (0.3, 0.3)
      startVal [time (s)] = 0
      text = bocadillo
      units = height
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    ButtonComponent coliflor
      bold = True
      forceEndRoutine = True
      letterHeight = 0.04
      size = (0.3, 0.3)
      startVal [time (s)] = 0
      text = coliflor
      units = height
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    ButtonComponent manzana
      bold = True
      forceEndRoutine = True
      letterHeight = 0.04
      pos = (0.5,0)
      size = (0.3, 0.3)
      startVal [time (s)] = 0
      text = manzana
      units = height
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  Routine break2PAN
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    TextComponent SentirESbreak
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      units = height
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      text:
        Si lo deseas, tómate un pequeño descanso.
        Pulsa "Siguente" para continuar con el experimento.
    ButtonComponent next2PANbreak
      bold = True
      forceEndRoutine = True
      letterHeight = 0.03
      pos = (0, -0.4)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      text = Siguiente
      units = height
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  Routine fin
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    TextComponent fin_y
      letterHeight = 0.05
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      units = height
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      text:
        Gracias por tu participación.
        Pulsa 'fin' para finalizar este estudio.
    ButtonComponent fin2PAN
      bold = True
      fillColor = -1.0000, 0.0902, 0.0902
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0, -0.4)
      size = (0.5, 0.5)
      startVal [time (s)] = 0
      text = fin
      units = height
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  Routine aut_personaldata
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    TextComponent infomored
      letterHeight = 0.025
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      units = height
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      text:
        Ante cualquier pregunta, por favor contacta con la coordinadora del estudio, Dra. Clara Martin y Dr. Cesar Caballero-Gaudes, en la dirección de email c.martin@bcbl.eu, c.caballero@bcbl.eu

        Gracias por participar en este estudio.
    TextComponent informed_2
      letterHeight = 0.025
      startVal [time (s)] = 0.0
      text = Tras la lectura de lo anterior, DECLARO que he sido convenientemente informado/a mediante de los detalles del estudio en el que voy a participar voluntariamente, entiendo tanto su propósito y lo que implica como la/s técnica/s que se van a utilizar durante el estudio y he tenido la posibilidad de resolver cualquier duda concerniente al estudio.
      units = height
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    ButtonComponent Iaccept
      bold = True
      forceEndRoutine = True
      letterHeight = 0.03
      pos = (-0.2, -0.4)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      text = Acepto
      units = height
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    ButtonComponent idonotaccept
      bold = True
      forceEndRoutine = False
      letterHeight = 0.03
      pos = (0.4, -0.4)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      text = No Acepto
      units = height
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  Routine consent_1
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    TextComponent personaldata
      letterHeight = 0.025
      pos = (0,0.4)
      startVal [time (s)] = 0.0
      text = Si el participante consiente participar en este estudio, recibirá la compensación por parte de Prolific.
      units = height
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    TextComponent personaldata_2
      letterHeight = 0.025
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      text = El participante debe seguir las normas y reglamentos de Prolific, y, una vez que el investigador haya aprobado tu respuestas, se abonará la cantidad indicada en el anuncio. Es necesario que el participante siga las instrucciones y responda dentro del tiempo específico permitido para completar el experimento.
      units = height
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    TextComponent personaldata_3
      letterHeight = 0.025
      pos = (0, -0.1)
      startVal [time (s)] = 0.0
      text = Este experimento consta de una sesión que durará aproximadamente 40 minutos. El tiempo que el/la participante invierta en este experimento dependerá del número de sesiones, los descansos y la velocidad a la que se complete la tarea.
      units = height
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    TextComponent personaldata_4
      letterHeight = 0.025
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text = La participación es totalmente voluntaria. Puedes detenerte en cualquier momento cerrando la ventana del navegador. No completar el estudio no impedirá que el/la participante pueda participar en futuros estudios que ofrezcamos pero no se compensará por la participación en este experimento.
      units = height
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    SliderComponent yesno
      forceEndRoutine = False
      granularity = 1
      labels = "Acepto", "No Acepto"
      letterHeight = 0.015
      pos = (-0.7,0.4)
      size = (0.1,0.03)
      startVal [time (s)] = 0.0
      styles = radio
      ticks = (1,2)
      units = height
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    SliderComponent yesno_2
      forceEndRoutine = False
      granularity = 1
      labels = "Acepto", "No Acepto"
      letterHeight = 0.015
      pos = (-0.7,0.2)
      size = (0.1,0.03)
      startVal [time (s)] = 0.0
      styles = radio
      ticks = (1,2)
      units = height
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    SliderComponent yesno_3
      forceEndRoutine = False
      granularity = 1
      labels = "Acepto", "No Acepto"
      letterHeight = 0.015
      pos = (-0.7,-0.1)
      size = (0.1,0.03)
      startVal [time (s)] = 0.0
      styles = radio
      ticks = (1,2)
      units = height
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    SliderComponent yesno_4
      forceEndRoutine = False
      granularity = 1
      labels = "Acepto", "No Acepto"
      letterHeight = 0.015
      pos = (-0.7,-0.3)
      size = (0.1,0.03)
      startVal [time (s)] = 0.0
      styles = radio
      ticks = (1,2)
      units = height
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    ButtonComponent Continuar
      bold = True
      forceEndRoutine = True
      letterHeight = 0.03
      pos = (0.55, -0.4)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      text = Acepto
      units = height
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  Routine concent_2
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    TextComponent personaldata_5
      letterHeight = 0.025
      pos = (0,0.35)
      startVal [time (s)] = 0.0
      text = Este estudio de investigación pertenece al centro Basque Center on Cognition, Brain and Language (www.bcbl.eu) y ha sido aprobado por el comité ético del centro. Al hacer clic en “Acepto”, el/la participante consiente la información anterior y acepta participar en el estudio.
      units = height
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    TextComponent personaldata_6
      letterHeight = 0.025
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
      text = El participante autoriza a BCBL a gestionar los datos obtenidos durante su participación en este estudio para su utilización en artículos científicos y congresos, basados en este estudio o publicaciones externas derivadas de él, así como para su diseminación en repositorios científicos públicos, siempre de forma totalmente anónima, para garantizar su reproducibilidad. En los siguientes puntos se informa sobre los repositorios de acceso público:
      units = height
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    TextComponent personaldata_7
      letterHeight = 0.025
      pos = (0, -0.1)
      startVal [time (s)] = 0.0
      text = Se mantendrá la parte privada de los datos del/de la participante (nombre, información de contacto, etc.) en un lugar seguro.
      units = height
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    TextComponent personaldata_8
      letterHeight = 0.025
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text = Los datos que se compartan no contendrán el nombre del participante y estarán anonimizados mediante un código, y no se compartirá ninguna otra información que el centro crea que pudiera identificar al participante.
      units = height
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    SliderComponent yesno_5
      forceEndRoutine = False
      granularity = 1
      labels = "Acepto", "No Acepto"
      letterHeight = 0.015
      pos = (-0.7,0.4)
      size = (0.1,0.03)
      startVal [time (s)] = 0.0
      styles = radio
      ticks = (1,2)
      units = height
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    SliderComponent yesno_6
      disabled = True
      forceEndRoutine = False
      granularity = 1
      labels = "Acepeto", "No Acepeto"
      letterHeight = 0.015
      pos = (-0.7,0.1)
      size = (0.1,0.03)
      startVal [time (s)] = 0.0
      styles = radio
      ticks = (1,2)
      units = height
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    SliderComponent yesno_7
      disabled = True
      forceEndRoutine = False
      granularity = 1
      labels = "Acepeto", "No Acepeto"
      letterHeight = 0.015
      pos = (-0.7,-0.1)
      size = (0.1,0.03)
      startVal [time (s)] = 0.0
      styles = radio
      ticks = (1,2)
      units = height
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    SliderComponent yesno_8
      disabled = True
      forceEndRoutine = False
      granularity = 1
      labels = "Acepeto", "No Acepeto"
      letterHeight = 0.015
      pos = (-0.7,-0.3)
      size = (0.1,0.03)
      startVal [time (s)] = 0.0
      styles = radio
      ticks = (1,2)
      units = height
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    ButtonComponent continuar_2
      bold = True
      forceEndRoutine = True
      letterHeight = 0.03
      pos = (0.55, -0.4)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      text = Acepto
      units = height
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  Routine consent_3
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    TextComponent perdonaldata_9
      letterHeight = 0.025
      pos = (0,0.4)
      startVal [time (s)] = 0.0
      text = Los datos y las muestras de este estudio podrían utilizarse para otros futuros proyectos de investigación y ser compartidos con otros investigadores de otras instituciones internacionales, además del estudio en que se esté participando actualmente. Esos futuros proyectos podrían estar enfocados a cualquier otra temática no relacionada con los objetivos de este estudio.
      units = height
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    TextComponent personaldata_10
      letterHeight = 0.025
      pos = (0,0.1)
      startVal [time (s)] = 0.0
      text = Se podrá dar acceso a los datos que se recogen en este estudio, incluidas las imágenes y las grabaciones de voz, a través de bases de datos de dominio público.
      units = height
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    TextComponent personaldata_11
      letterHeight = 0.025
      pos = (0, -0.1)
      startVal [time (s)] = 0.0
      text = Cualquier dato o resultados de investigación que ya hayan sido compartidos con otros investigadores o el dominio público no podrán ser destruidos o retirados.
      units = height
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    TextComponent personaldata_12
      letterHeight = 0.025
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text = Asimismo, el riesgo de que se produzca una violación de seguridad (ataque cibernético) que pudiera hacer que alguien asociase al participante con sus datos es muy bajo, ya que los datos están guardados en una base de datos segura, y la información está guardada por separado, relacionados mediante un solo código.
      units = height
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    SliderComponent yesno_9
      disabled = True
      forceEndRoutine = False
      granularity = 1
      labels = "Acepeto", "No Acepeto"
      letterHeight = 0.015
      pos = (-0.7,0.4)
      size = (0.1,0.03)
      startVal [time (s)] = 0.0
      styles = radio
      ticks = (1,2)
      units = height
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    SliderComponent yesno_10
      disabled = True
      forceEndRoutine = False
      granularity = 1
      labels = "Acepeto", "No Acepeto"
      letterHeight = 0.015
      pos = (-0.7,0.1)
      size = (0.1,0.03)
      startVal [time (s)] = 0.0
      styles = radio
      ticks = (1,2)
      units = height
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    SliderComponent yesno_11
      disabled = True
      forceEndRoutine = False
      granularity = 1
      labels = "Acepeto", "No Acepeto"
      letterHeight = 0.015
      pos = (-0.7,-0.1)
      size = (0.1,0.03)
      startVal [time (s)] = 0.0
      styles = radio
      ticks = (1,2)
      units = height
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    SliderComponent yesno_12
      disabled = True
      forceEndRoutine = False
      granularity = 1
      labels = "Acepeto", "No Acepeto"
      letterHeight = 0.015
      pos = (-0.7,-0.3)
      size = (0.1,0.03)
      startVal [time (s)] = 0.0
      styles = radio
      ticks = (1,2)
      units = height
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    ButtonComponent continuar_3
      bold = True
      forceEndRoutine = True
      letterHeight = 0.03
      pos = (0.55, -0.4)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      text = Acepto
      units = height
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  Routine fine_print
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    TextComponent fine_print_consent
      letterHeight = 0.025
      startVal [time (s)] = 0.0
      units = height
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      text:
        Tus datos de carácter personal, o de la persona a la que representas, serán tratados y se incorporarán a ficheros de los que es responsable el BCBL y que tienen como finalidad la gestión y la administración del centro, la realización de estudios sobre la cognición, el cerebro y el lenguaje y el envío de comunicaciones relacionadas con estos fines por cualquier medio. La legitimación para el tratamiento es el consentimiento de la persona interesada. Estos datos, que se conservarán de forma indefinida, solo podrán ser cedidos, anonimizados, a instituciones o personas dedicadas a fines análogos, salvo las cesiones legalmente establecidas.

        Podras ejercitar los derechos de acceso, rectificación, supresión, portabilidad, limitación de tratamiento, revocar el consentimiento o no ser objeto de decisiones basadas únicamente en el tratamiento automatizado de sus datos, de conformidad al Reglamento (UE) 2016/679 y a la ley Orgánica 3/2018 de 5 de diciembre de protección de datos personales y garantía de los derechos digitales dirigiendo un correo electrónico a info@bcbl.eu o bien mediante escrito dirigido al Delegado de Protección de Datos a la dirección Paseo Mikeletegi, 69 – 2o - 20009 SAN SEBASTIÁN, acompañando fotocopia de su DNI.
    ButtonComponent Iaccept_2
      bold = True
      forceEndRoutine = True
      letterHeight = 0.03
      pos = (-0.2, -0.4)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      text = Acepto
      units = height
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    ButtonComponent idontaccept_2
      bold = True
      forceEndRoutine = False
      letterHeight = 0.03
      pos = (0.4, -0.4)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      text = No Acepto
      units = height
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  Routine breif_description
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    TextComponent text
      letterHeight = 0.025
      startVal [time (s)] = 0.0
      units = height
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      text:
        ¡Gracias por participar en este estudio! Por favor, lee detenidamente la siguiente información y no dudes en preguntarnos si precisas alguna aclaración adicional. Muchas gracias.

        Este estudio trata de investigar las diferencias en cómo los hablantes monolingües y nativos de español e inglés reaccionan corporalmente con el lenguaje cotidiano. A nivel intercultural, nuestros idiomas dan forma a nuestro entorno y viceversa. Esto aún no se ha investigado entre dos idiomas.
    ButtonComponent continuar_4
      bold = True
      forceEndRoutine = True
      letterHeight = 0.03
      pos = (0.55, -0.4)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      text = Acepto
      units = height
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  Routine experimento
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    TextComponent text_2
      letterHeight = 0.025
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      text = Ahora, comenzarás el estudio, que durará aproximadamente 40 minutos y la compensación será de 7 euros. Por favor, una vez comenzado el test, es importante que realices el estudio todo seguido hasta el final y evitando distracciones (móvil, ruidos, levantarse, etc.). Con el objetivo de asegurarnos de que la tarea se hace adecuadamente, deberás contestar algunas preguntas no relacionadas con el estudio. Estas preguntas NO RELACIONADAS con el estudio le servirán al investigador responsable para saber si estás prestando la atención necesaria y haciendo el experimento online adecuadamente. Una vez completada la tarea, un comité de investigadores chequeará la fiabilidad de los datos y, en caso de sospecha de fraudulencia (p. ej., si las preguntas NO RELACIONADAS con el estudio no se responden correctamente a menudo), esto podría llevar a tu exclusión del estudio o a no compensarte económicamente.
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    TextComponent text_3
      letterHeight = 0.025
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      units = height
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      text:
        TEN EN CUENTA QUE para llevar a cabo este estudio:

        -Es necesario que dispongas de un teclado y un ratón.

        -Debes utilizar Firefox o Chrome.

        -Sólo puedes realizar el experimento en portátil, ordenador de MAC o PC.

        -La ventana del experimento se cerrará automáticamente al pulsar "Fin".
    ButtonComponent continuar_5
      bold = True
      forceEndRoutine = True
      letterHeight = 0.03
      pos = (0.55, -0.4)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      text = Acepto
      units = height
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  Routine debriefing_2
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    TextComponent debriefing_3
      letterHeight = 0.025
      pos = (0, 0.25)
      startVal [time (s)] = 0.0
      units = height
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      text:
        Este estudio trata de investigar las diferencias en cómo los hablantes monolingües y nativos de español e inglés reaccionan corporalmente con el lenguaje cotidiano. A nivel intercultural, nuestros idiomas dan forma a nuestro entorno y viceversa. Esto aún no se ha investigado entre dos idiomas.

        Nuestra hipótesis es que encontraremos diferencias entre la forma en que los hablantes monolingües nativos del español e inglés marquen las palabras en la encuesta. La encuesta que acabas de completar nos ayudará a formar una representación de estas dos culturas e idiomas.

        En un mundo en constante evolución de la tecnología y la inteligencia artificial, este estudio ayuda a los investigadores a fundamentar la manera en que el lenguaje evoca respuestas sensoriales en nuestros cuerpos.
    TextComponent contact
      letterHeight = 0.025
      pos = (0, -0.1)
      startVal [time (s)] = 0.0
      text = Si quieres saber más sobre el centro que ha diseñado este experimento, BCBL (Basque Center on Cognition, Brain and Language), visita nuestra web (www.bcbl.eu) y síguenos en redes sociales como Facebook (@bcbl.eu), Instagram (bcbl_basque_center), Twitter (@bcbl_) y YouTube (BCBL) para enterarte de todas las novedades del BCBL y del área de la neurociencia cognitiva.
      units = height
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    ButtonComponent next
      bold = True
      forceEndRoutine = True
      letterHeight = 0.03
      pos = (0.55, -0.4)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      text = Siguiente
      units = height
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Flow
  Routine BCBL
  Routine consent_1
  Routine concent_2
  Routine consent_3
  Routine aut_personaldata
  Routine fine_print
  Routine breif_description
  Routine experimento
  Routine instructions2PAN
  LoopInitiator SentirES2PAN19 loopType="TrialHandler"
    conditionsFile = stimSPAN/Stimuli2PAN19.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('Index', 203), ('Word', 'EMOCIONANTE'), ('Category', 'highly haptic')]),
      OrderedDict([('Index', 610), ('Word', 'CUAJAR'), ('Category', 'balanced')]),
      OrderedDict([('Index', 16), ('Word', 'DÍA'), ('Category', 'highly visual')]),
      OrderedDict([('Index', 8), ('Word', 'A LA VISTA'), ('Category', 'highly visual')]),
      OrderedDict([('Index', 407), ('Word', 'SOBRESCRIBIR'), ('Category', 'none')]),
      OrderedDict([('Index', 202), ('Word', 'TOCAR'), ('Category', 'highly haptic')]),
      OrderedDict([('Index', 211), ('Word', 'SUAVIDAD'), ('Category', 'highly haptic')]),
      OrderedDict([('Index', 401), ('Word', 'INTUITIVAMENTE'), ('Category', 'none')]),
      OrderedDict([('Index', 618), ('Word', 'FÉMUR'), ('Category', 'balanced')]),
      OrderedDict([('Index', 212), ('Word', 'ACARICIADO'), ('Category', 'highly haptic')]),
      OrderedDict([('Index', 208), ('Word', 'ACARICIAR'), ('Category', 'highly haptic')]),
      OrderedDict([('Index', 214), ('Word', 'PELUDO'), ('Category', 'highly haptic')]),
      OrderedDict([('Index', 616), ('Word', 'INDESTRUCTIBILIDAD'), ('Category', 'balanced')]),
      OrderedDict([('Index', 215), ('Word', 'MASILLOSO'), ('Category', 'highly haptic')]),
      OrderedDict([('Index', 406), ('Word', 'AULLIDO'), ('Category', 'none')]),
      OrderedDict([('Index', 612), ('Word', 'TÁCTILMENTE'), ('Category', 'balanced')]),
      OrderedDict([('Index', 11), ('Word', 'CARA'), ('Category', 'highly visual')]),
      OrderedDict([('Index', 408), ('Word', 'DEPLORAR'), ('Category', 'none')])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
    Routine SentirES_psychopy
  LoopTerminator SentirES2PAN19
  Routine catch2PAN1
  LoopInitiator SentirES2SPAN45 loopType="TrialHandler"
    conditionsFile = stimSPAN/Stimuli2PAN45.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('Index', 600), ('Word', 'TIRADO'), ('Category', 'balanced ')]),
      OrderedDict([('Index', 400), ('Word', 'PARAPSICOLOGÍA'), ('Category', 'none ')]),
      OrderedDict([('Index', 617), ('Word', 'DIESTRO'), ('Category', 'balanced ')]),
      OrderedDict([('Index', 417), ('Word', 'PESIMISTA'), ('Category', 'none ')]),
      OrderedDict([('Index', 603), ('Word', 'PICAPORTE'), ('Category', 'balanced ')]),
      OrderedDict([('Index', 410), ('Word', 'MALA PERSONA'), ('Category', 'none ')]),
      OrderedDict([('Index', 15), ('Word', 'CIELOS'), ('Category', 'highly visual')]),
      OrderedDict([('Index', 13), ('Word', 'VISTA'), ('Category', 'highly visual')]),
      OrderedDict([('Index', 405), ('Word', 'PELIGRO'), ('Category', 'none ')]),
      OrderedDict([('Index', 207), ('Word', 'AGARRE'), ('Category', 'highly haptic ')]),
      OrderedDict([('Index', 414), ('Word', 'INCOMUNICABILIDAD'), ('Category', 'none ')]),
      OrderedDict([('Index', 10), ('Word', 'YOUTUBE'), ('Category', 'highly visual')]),
      OrderedDict([('Index', 602), ('Word', 'AFLOJAR'), ('Category', 'balanced ')]),
      OrderedDict([('Index', 608), ('Word', 'GOLPE'), ('Category', 'balanced ')]),
      OrderedDict([('Index', 413), ('Word', 'PODRÍA'), ('Category', 'none ')]),
      OrderedDict([('Index', 12), ('Word', 'TELEVISIÓN'), ('Category', 'highly visual')]),
      OrderedDict([('Index', 23), ('Word', 'VISIBLE'), ('Category', 'highly visual')]),
      OrderedDict([('Index', 615), ('Word', 'NO COMESTIBLE'), ('Category', 'balanced ')]),
      OrderedDict([('Index', 419), ('Word', 'ALÉRGICO'), ('Category', 'none ')])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
    Routine SentirES_psychopy
  LoopTerminator SentirES2SPAN45
  Routine catch2SPAN2
  Routine break2PAN
  LoopInitiator SentirES2SPAN78 loopType="TrialHandler"
    conditionsFile = stimSPAN/Stimuli2PAN78.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('Idex', 0), ('Word', 'VISTA LATERAL'), ('Category', 'highly visual')]),
      OrderedDict([('Idex', 213), ('Word', 'LISO'), ('Category', 'highly haptic ')]),
      OrderedDict([('Idex', 614), ('Word', 'DOLOROSO'), ('Category', 'balanced ')]),
      OrderedDict([('Idex', 6), ('Word', 'WIKIPEDIA'), ('Category', 'highly visual')]),
      OrderedDict([('Idex', 611), ('Word', 'TOMILLO'), ('Category', 'balanced ')]),
      OrderedDict([('Idex', 416), ('Word', 'CONSIGUIENTE '), ('Category', 'none ')]),
      OrderedDict([('Idex', 403), ('Word', 'EXCRETOR'), ('Category', 'none ')]),
      OrderedDict([('Idex', 206), ('Word', 'MASAJE'), ('Category', 'highly haptic ')]),
      OrderedDict([('Idex', 607), ('Word', 'ABRIGARSE'), ('Category', 'balanced ')]),
      OrderedDict([('Idex', 605), ('Word', 'COXIS'), ('Category', 'balanced ')]),
      OrderedDict([('Idex', 205), ('Word', 'FROTAR'), ('Category', 'highly haptic ')]),
      OrderedDict([('Idex', 418), ('Word', 'NO'), ('Category', 'none ')]),
      OrderedDict([('Idex', 201), ('Word', 'ESPINOSO'), ('Category', 'highly haptic ')]),
      OrderedDict([('Idex', 404), ('Word', 'ÁNGEL GUARDIÁN'), ('Category', 'none ')]),
      OrderedDict([('Idex', 409), ('Word', 'JURAR'), ('Category', 'none ')]),
      OrderedDict([('Idex', 601), ('Word', 'RETOMAR'), ('Category', 'balanced ')]),
      OrderedDict([('Idex', 2), ('Word', 'CÓDIGO DE BARRAS'), ('Category', 'highly visual')]),
      OrderedDict([('Idex', 620), ('Word', 'GOLPECITO'), ('Category', 'balanced ')]),
      OrderedDict([('Idex', 3), ('Word', 'VER'), ('Category', 'highly visual')])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
    Routine SentirES_psychopy
  LoopTerminator SentirES2SPAN78
  Routine catch2PAN3
  LoopInitiator SentirES2SPAN80 loopType="TrialHandler"
    conditionsFile = stimSPAN/Stimuli2PAN80.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('Index', 412), ('Word', 'INFUNDADO'), ('Category', 'none ')]),
      OrderedDict([('Index', 1), ('Word', 'BRILLO'), ('Category', 'highly visual')])]
    Routine SentirES_psychopy
  LoopTerminator SentirES2SPAN80
  Routine debriefing_2
  Routine fin
